CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Drag your COMET OME-TIFF here, then hit the file-list refresh. The pipeline pulls channels by their T-plane index (see NamesAndTypes).']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Extract from image file headers so each plane gets a T (channel) index. This is what NamesAndTypes matches on.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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notes:['Each marker is pulled from its T-plane index (0-based): DAPI=0, CD206=7, GFAP=16, APOE=17, Arg1=21, CD74=23, CD11b=25, CD68=26, Iba1=19.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:16
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (metadata does T "0")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does T "17")
    Name to assign these images:Iba1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does T "14")
    Name to assign these images:GFAP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does T "24")
    Name to assign these images:CD68
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does T "15")
    Name to assign these images:APOE
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does T "21")
    Name to assign these images:CD74
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does T "23")
    Name to assign these images:CD11b
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does T "19")
    Name to assign these images:Arg1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does T "5")
    Name to assign these images:CD206
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does T "10")
    Name to assign these images:CD3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does T "6")
    Name to assign these images:CD4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does T "8")
    Name to assign these images:CD8
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does T "7")
    Name to assign these images:NeuN
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does T "20")
    Name to assign these images:CD44
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does T "26")
    Name to assign these images:MAA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (metadata does T "27")
    Name to assign these images:SNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Segment microglia directly on the Iba1 signal (marker-shape, mirrors your ImageJ Make Binary -> size filter). TUNE: diameter min/max, threshold correction factor, and whether to declump.']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
    Select the input image:Iba1
    Name the primary objects to be identified:Microglia
    Typical diameter of objects, in pixel units (Min,Max):30,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.01,1.0
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    Log transform before thresholding?:Yes
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

IdentifyPrimaryObjects:[module_num:6|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notes:['Segment astrocytes on GFAP signal. TUNE: diameter min/max and threshold correction factor for the more diffuse GFAP staining.']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
    Select the input image:GFAP
    Name the primary objects to be identified:Astrocytes
    Typical diameter of objects, in pixel units (Min,Max):30,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:.02,1.0
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    Log transform before thresholding?:Yes
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

MeasureObjectSizeShape:[module_num:7|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notes:['Morphology features: area, perimeter, form factor, eccentricity, solidity, compactness, etc. Zernikes on for shape fingerprinting.']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
    Select object sets to measure:Microglia, Astrocytes
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:8|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notes:['Per-cell MFI of each phenotypic marker within the Microglia and Astrocyte masks. This is your single-cell expression matrix.']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
    Select images to measure:APOE, Arg1, CD11b, CD206, CD44, CD68, CD74, GFAP, Iba1, MAA, SNA
    Select objects to measure:Microglia, Astrocytes

ConvertObjectsToImage:[module_num:9|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
    Select the input objects:Microglia
    Name the output image:MicrogliaBinary
    Select the color format:Binary (black & white)
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
ConvertObjectsToImage:[module_num:10|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
    Select the input objects:Astrocytes
    Name the output image:AstrocyteBinary
    Select the color format:Binary (black & white)
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
MorphologicalSkeleton:[module_num:11|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
    Select the input image:MicrogliaBinary
    Name the output image:MicrogliaSkeleton

MorphologicalSkeleton:[module_num:12|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
    Select the input image:AstrocyteBinary
    Name the output image:AstrocyteSkeleton

ExpandOrShrinkObjects:[module_num:13|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
    Select the input objects:Microglia
    Name the output objects:MicrogliaSeeds
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
    Fill holes in objects so that all objects shrink to a single point?:No
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
ExpandOrShrinkObjects:[module_num:14|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
    Select the input objects:Astrocytes
    Name the output objects:AstrocyteSeeds
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
    Fill holes in objects so that all objects shrink to a single point?:No
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
MeasureObjectSkeleton:[module_num:15|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
    Select the seed objects:MicrogliaSeeds
    Select the skeletonized image:MicrogliaSkeleton
    Retain the branchpoint image?:Yes
    Name the branchpoint image:MicrogliaBranchpoints
    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureObjectSkeleton:[module_num:16|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
    Select the seed objects:AstrocyteSeeds
    Select the skeletonized image:AstrocyteSkeleton
    Retain the branchpoint image?:Yes
    Name the branchpoint image:AstrocyteBranchpoints
    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

IdentifyPrimaryObjects:[module_num:17|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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):6,30
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:18|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DAPI
    Number of pixels by which to expand the primary objects:3
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
MeasureObjectSizeShape:[module_num:19|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
    Select object sets to measure:Cells
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:20|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
    Select images to measure:APOE, Arg1, CD11b, CD206, CD3, CD4, CD44, CD68, CD74, CD8, GFAP, Iba1, MAA, NeuN, SNA
    Select objects to measure:Cells, Nuclei

FilterObjects:[module_num:21|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
    Select the objects to filter:Cells
    Name the output objects:Neurons
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_NeuN
    Filter using a minimum measurement value?:Yes
    Minimum value:0.03
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:22|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
    Select the objects to filter:Astrocytes
    Name the output objects:AstrocytesFiltered
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_GFAP
    Filter using a minimum measurement value?:Yes
    Minimum value:0.024
    Filter using a maximum measurement value?:No
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
CalculateMath:[module_num:23|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
    Name the output measurement:CD8_CD4_ratio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:Cells
    Select the numerator measurement:Intensity_MeanIntensity_CD8
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Cells
    Select the denominator measurement:Intensity_MeanIntensity_CD4
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
FilterObjects:[module_num:24|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
    Select the objects to filter:Cells
    Name the output objects:Tcells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:5
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_CD3
    Filter using a minimum measurement value?:Yes
    Minimum value:0.022
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_NeuN
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.05
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:90
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:950
    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.65
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:25|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
    Select the objects to filter:Cells
    Name the output objects:CD8_Tcells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:6
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_CD3
    Filter using a minimum measurement value?:Yes
    Minimum value:0.022
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_NeuN
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.05
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:90
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:950
    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.65
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Math_CD8_CD4_ratio
    Filter using a minimum measurement value?:Yes
    Minimum value:1.0
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:26|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
    Select the objects to filter:Cells
    Name the output objects:CD4_Tcells
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:6
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_CD3
    Filter using a minimum measurement value?:Yes
    Minimum value:0.022
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Intensity_MeanIntensity_NeuN
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.05
    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:90
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:950
    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.65
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Math_CD8_CD4_ratio
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1.0
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
ExportToSpreadsheet:[module_num:27|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notes:['Writes one CSV per object (Microglia.csv, Astrocytes.csv) plus Image.csv to the default output folder.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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